 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Loading\\DeckLoadingVCurrent.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Notify\\Module\\Notify.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\StatusUpdate\\Module\\StatusUpdate.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Module\\Heater.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Timer\\Module\\Timer.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Module\\Transport.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Module\\Vacuum.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Lid\\Module\\Lid.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\MagneticBeads\\Module\\Magnetic Beads.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\PfizerTools\\PfizerToolsVCurrent.hs_" }
 namespace _UserInformationProcess { #include "HSLStrLib.hsl" }
 namespace _UserInformationProcess { #include "ASWStandardDialogs\\ASWStandardDialogs.hsl" }
 namespace _UserInformationProcess { #include "HSLUtilLib.hsl" }
 namespace _UserInformationProcess { #include "HSLTrcLib.hsl" }
 namespace _UserInformationProcess { #include "HSLUtilLib2.hsl" }
 namespace _UserInformationProcess { #include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Loading\\DeckLoadingVCurrent.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Pipette\\Module\\Pipette.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Labware\\Labware.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Sequences\\Sequences.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Notify\\Module\\Notify.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\StatusUpdate\\Module\\StatusUpdate.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Heater\\Module\\Heater.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Timer\\Module\\Timer.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Transport\\Module\\Transport.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Vacuum\\Module\\Vacuum.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Script\\Module\\Script.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\Lid\\Module\\Lid.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\MagneticBeads\\Module\\Magnetic Beads.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\ReturnIDs.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Return\\Return.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\PfizerTools\\PfizerToolsVCurrent.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\IMCS SizeX Desalting\\Module\\IMCS SizeX Desalting.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Modules\\IMCS SizeX Desalting\\Module\\IMCS SizeX Desalting.hs_" }
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.res"
 namespace _Method { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Debugging\\Debugging.hs_" }
 namespace _UserInformationProcess { #include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Debugging\\Debugging.hs_" }
variable Out;
variable Command[];
variable _;
variable loopCounter4;
variable _SampleNumber;
variable _SampleEndPosition;
variable _SampleStartPosition;
variable intDaisyHHC1;
variable strCOMHHC1;
variable intHHC1Return;
variable arrHHC1[];
variable TitleString;
variable CoordinateString;
variable _Log_Selection;
variable _Log_Options[];
variable _Log_Text;
global device ML_STAR ("C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorConfiguration\\Deck Layout\\Pfizer Deck Layout Method Maker vCurrent.lay", "ML_STAR", hslTrue);
global variable ScriptRootPath;
global variable PythonRootPath;
variable SequenceStringsArray[];
variable ModuleCommand;
variable Module;
variable CommandString;
variable Dict[];
variable ReturnString;
variable ID;
dialog customDialog_1;
dialog customDialog_2;
variable CommandCounter;
variable NumCommands;
dialog customDialog_3;
variable ParseNumeric;
variable loopCounter5;
variable ParseAlpha;
variable _TEST_LIST[];
variable loopCounter1;
dialog customDialog_4;
event _ASYNC_PROCESS_USER_INFORMATION_Start;
variable UserInformationProcess;
variable _ASYNC_PROCESS_USER_INFORMATION_DeckLoadingFlag;
variable ButtonChoice;
variable _ASYNC_PROCESS_USER_INFORMATION_KillFlag;
variable _ASYNC_PROCESS_USER_INFORMATION_HeaterFlag;
variable InnerButtonChoice;
variable loopCounter2;
dialog customDialog_5;
dialog customDialog_6;
variable PreFlightCheckOutput;
variable ScriptRunningFlag;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _UserInformationProcess { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _UserInformationProcess { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _UserInformationProcess { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _UserInformationProcess { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }
 namespace _UserInformationProcess {  #include __filename__ ".sub"  }
namespace _UserInformationProcess{ function tfn_UserInformationProcess () {
    _ASYNC_PROCESS_USER_INFORMATION_HeaterFlag = 0;
    _ASYNC_PROCESS_USER_INFORMATION_DeckLoadingFlag = 0;
    _ASYNC_PROCESS_USER_INFORMATION_KillFlag = Translate("False");
    ButtonChoice = -1;
    if( 0 == _ASYNC_PROCESS_USER_INFORMATION_Start.WaitEvent(hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1221721854, MECC::IDS::stepNameWaitForEvent, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    AswStandardDialogs::Initialize();
    {
      loopCounter1 = 0;
      while (_ASYNC_PROCESS_USER_INFORMATION_KillFlag == "False")
      {
        loopCounter1 = loopCounter1 + 1;
        if (ButtonChoice == 2)
        {
          NOTIFY::GetContacts(Translate("True"));
        }
        if (ButtonChoice == 3)
        {
          DECKLOADINGVCURRENT::DoDeckLoading();
        }
        if (ButtonChoice == 4)
        {
          InnerButtonChoice = 1;
          {
            loopCounter2 = 0;
            while (InnerButtonChoice == 1)
            {
              loopCounter2 = loopCounter2 + 1;
              HEATER::GetHeatersInfo(_TEST_LIST);
              InnerButtonChoice = AswStandardDialogs::ListDialog(Translate(""), 1, 1, 0, 0, 5, Translate("This dialog can be used to see information related to the Heater Shakers/Coolers in real time. Please click OK to get the most up to date information."), Translate("Please Click OK to get the most up to date information or Click Cancel to return to menu."), _TEST_LIST);
              if (InnerButtonChoice == -8)
              {
                InnerButtonChoice = 1;
              }
            }
          }
        }
        customDialog_4.InitCustomDialog("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");
        customDialog_4.SetCustomDialogProperty( "button1.IsVisible", _ASYNC_PROCESS_USER_INFORMATION_DeckLoadingFlag );
        customDialog_4.SetCustomDialogProperty( "button2.IsVisible", _ASYNC_PROCESS_USER_INFORMATION_HeaterFlag );
        customDialog_4.ShowCustomDialog();
        ButtonChoice = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
      }
    }
    AswStandardDialogs::Terminate();
  } }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    DECKLOADINGVCURRENT::_InitLibrary();
    PIPETTE::_InitLibrary();
    LABWARE::_InitLibrary();
    SEQUENCES::_InitLibrary();
    COMMANDS::_InitLibrary();
    NOTIFY::_InitLibrary();
    STATUSUPDATE::_InitLibrary();
    HEATER::_InitLibrary();
    TIMER::_InitLibrary();
    TRANSPORT::_InitLibrary();
    VACUUM::_InitLibrary();
    SCRIPT::_InitLibrary();
    LID::_InitLibrary();
    MAGNETIC_BEADS::_InitLibrary();
    RETURNIDS::_InitLibrary();
    RETURN::_InitLibrary();
    PFIZERTOOLSVCURRENT::_InitLibrary();
    IMCS_SIZEX_DESALTING::_InitLibrary();
    DEBUGGING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ScriptRunningFlag = Translate("False");
    UserInformationProcess = Fork("_UserInformationProcess::tfn_UserInformationProcess");
    if( UserInformationProcess == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    STATUSUPDATE::Init(ML_STAR, Translate("[StatusDialogTitle]Automation Bare Necessities - Performing Initialization"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Starting initialization sequence"));
    SCRIPT::Init();
    DEBUGGING::Init(Translate("True"));
    COMMANDS::StartSystem();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    _SampleStartPosition = 0;
    _SampleEndPosition = 0;
    _SampleNumber = 0;
    _Log_Options.SetSize(0);
    _Log_Options.AddAsLast(Translate("Run From Beginning of Method"));
    _Log_Options.AddAsLast(Translate("Resume Method"));
    _Log_Options.AddAsLast(Translate("Repeat Last Step then Continue"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Preflight checklist"));
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    PreFlightCheckOutput = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    if (PreFlightCheckOutput == 2)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      PreFlightCheckOutput = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
      STATUSUPDATE::DeInit(ML_STAR, Translate(""));
      abort;
    }
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Waiting for user to select method file"));
    Out = ChooseMethodFile();
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Starting Enzyme cooler"));
    strCOMHHC1 = Translate("COM4");
    intDaisyHHC1 = 0;
    intHHC1Return = 0;
    arrHHC1.SetSize(1);
    intHHC1Return = HamiltonHeaterCooler::Connect(strCOMHHC1, 5, intDaisyHHC1, arrHHC1);
    HamiltonHeaterCooler::SetTemperature(arrHHC1.ElementAt( 1 -1), 0.0, 8.0, 4.0, 0, 1);
    MECC::TraceComment(Translate("##################################\n########### Pre Run and Init ###########\n##################################"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Testing method file before running. This may take a hot second"));
    RunMakerScript(Out, 1, Translate("Init"));
    ScriptRunningFlag = Translate("True");
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        COMMANDS::GetCommand(Command);
        Util2::Debug::TraceArray(Translate(""), Command);
        CommandString = Command.ElementAt( 1 -1);
        if (Command.ElementAt( 1 -1) == "TimerExpired")
        {
          ScriptRunningFlag = Translate("False");
          NOTIFY::DoCommand(ML_STAR, Translate("[Module]Notify[Command]SendMessage[Subject]Possible Script Error[Body]Hello, the scripts appear to have stopped communicating with the Hamilton. This run is being aborted. Do not fret! You can resume the method normally. Remember to save the excel sheet before you restart method execution![WaitForUser]Yes"));
          abort;
        }
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        NumCommands=Command.GetSize();
        {
          for(CommandCounter = 0; CommandCounter < NumCommands;)
          {
            CommandCounter = CommandCounter + 1;
            CommandString = Command.ElementAt( CommandCounter -1);
            TrcTrace(Translate("Command String: "), CommandString);
            Module = COMMANDS::GetCommandStringModule(CommandString);
            ModuleCommand = COMMANDS::GetCommandStringCommand(CommandString);
            if (Module == "PreRun")
            {
              if (ModuleCommand == "Labware")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing deck loading module"));
                LABWARE::Init(CommandString);
                MECC::TraceComment(Translate("***** Checking Labware module sequences for validity *****"));
                MECC::TraceComment(Translate("***** Checking Labware module sequences for validity ***** Labware"));
                LABWARE::GetAllSequenceStrings(SequenceStringsArray);
                SEQUENCES::CheckSequences(ML_STAR, SequenceStringsArray);
                MECC::TraceComment(Translate("***** Checking Labware module sequences for validity ***** SUCCESS"));
                ID = RETURNIDS::SuccessNoErrors();
                ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
                _ASYNC_PROCESS_USER_INFORMATION_DeckLoadingFlag = Translate("True");
              }
              if (ModuleCommand == "Lid")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing plate lids module"));
                ReturnString = LID::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Samples")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing sample tracking module"));
                COMMANDS::ParseCommandParametersString(CommandString, Dict);
                COMMANDS::GetDictionaryItem(Dict, Translate("SampleNumber"), _SampleNumber);
                _SampleNumber = StrIVal(_SampleNumber);
                ID = RETURNIDS::SuccessNoErrors();
                ReturnString = RETURN::CreateReturnString(ID, Translate("Init always succeeds"), Translate(""), Translate(""));
              }
              if (ModuleCommand == "Pipette")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing pipetting module"));
                ReturnString = PIPETTE::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "MagneticBeads")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing magnetic beads module"));
                ReturnString = MAGNETIC_BEADS::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Notify")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing user notifications module"));
                ReturnString = NOTIFY::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "IMCS SizeX Desalt")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing IMCS SizeX desalting module"));
                ReturnString = IMCS_SIZEX_DESALTING::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Vacuum")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing vacuum module"));
                ReturnString = VACUUM::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Heater")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing heater shaker / cooler module"));
                ReturnString = HEATER::Init(ML_STAR, CommandString);
                _ASYNC_PROCESS_USER_INFORMATION_HeaterFlag = Translate("True");
              }
              if (ModuleCommand == "Transport")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing labware transport module"));
                ReturnString = TRANSPORT::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Timer")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Initializing timer module"));
                ReturnString = TIMER::Init(ML_STAR, CommandString);
              }
              if (ModuleCommand == "Log")
              {
                STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Receiving log information"));
                COMMANDS::ParseCommandParametersString(CommandString, Dict);
                COMMANDS::GetDictionaryItem(Dict, Translate("Title"), TitleString);
                COMMANDS::GetDictionaryItem(Dict, Translate("Coordinates"), CoordinateString);
                _Log_Text = StrConcat12(Translate("There is a RunLog present. This following step is the latest step that was logged for the system. Please choose how you would like to proceed from the dropdown."), Translate("\n\nNOTE: Be sure to confirm step selection in the Hamilton log if required.\n\n"), Translate("Step Found:\n"), TitleString, Translate("\n"), CoordinateString, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                customDialog_1.InitCustomDialog("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");
                customDialog_1.SetCustomDialogArrayProperty( "comboBox1.ItemsSource", _Log_Options );
                customDialog_1.SetCustomDialogProperty( "textBlock1.Text", _Log_Text );
                customDialog_1.ShowCustomDialog();
                _Log_Selection = customDialog_1.GetCustomDialogProperty( "comboBox1.Text" );
                customDialog_2.InitCustomDialog("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");
                customDialog_2.ShowCustomDialog();
                ID = RETURNIDS::SuccessItemsReturned();
                ReturnString = RETURN::CreateReturnString(ID, Translate("Option selected from dropdown"), Translate("Response"), _Log_Selection);
              }
              COMMANDS::CollectResponse(ReturnString);
            }
          }
        }
        COMMANDS::WriteResponse();
      }
    }
    COMMANDS::FinishRun();
    ScriptRunningFlag = Translate("False");
    MECC::TraceComment(Translate("##################################\n######### End Pre Run and Init ##########\n##################################"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Calculating used tips"));
    PIPETTE::ShowTipsDialog();
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Generating deck loading"));
    DECKLOADINGVCURRENT::DoDeckLoading();
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Waiting for user to load tips"));
    PIPETTE::DoTipLoading(ML_STAR);
    COMMANDS::StartSystem();
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]System initialized! Waiting for user to start the run"));
    _SampleStartPosition = -1;
    {
      loopCounter5 = 0;
      while (_SampleStartPosition == -1)
      {
        loopCounter5 = loopCounter5 + 1;
        customDialog_3.InitCustomDialog("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");
        customDialog_3.ShowCustomDialog();
        ParseAlpha = customDialog_3.GetCustomDialogProperty( "textBox1.Text" );
        ParseNumeric = customDialog_3.GetCustomDialogProperty( "textBox2.Text" );
        _SampleStartPosition = PFIZERTOOLSVCURRENT::_96WellAlphanumericToNumeric(ParseAlpha, ParseNumeric);
      }
    }
    _SampleEndPosition = _SampleStartPosition + _SampleNumber;
    _SampleEndPosition = _SampleEndPosition - 1;
    Trace("Start Position : ", _SampleStartPosition);
    Trace("End Position : ", _SampleEndPosition);
    Trace("Sample Number : ", _SampleNumber);
    STATUSUPDATE::DeInit(ML_STAR, Translate(""));
    STATUSUPDATE::Init(ML_STAR, Translate("[StatusDialogTitle]Automation Bare Necessities - Running Method"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]SetProgress[PercentComplete]0"));
    STATUSUPDATE::DoCommand(ML_STAR, Translate("[Command]AddProgressDetail[DetailMessage]Started Automation Bare Necessities script"));
    RunMakerScript(Out, _SampleStartPosition, Translate("Run"));
    ScriptRunningFlag = Translate("True");
    if( 0 == _ASYNC_PROCESS_USER_INFORMATION_Start.SetEvent() )
    {
          MECC::RaiseRuntimeErrorEx(-1557266176, MECC::IDS::stepNameSetEvent, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    {
      loopCounter4 = 0;
      while ("" == "")
      {
        loopCounter4 = loopCounter4 + 1;
        COMMANDS::GetCommand(Command);
        Util2::Debug::TraceArray(Translate(""), Command);
        CommandString = Command.ElementAt( 1 -1);
        if (Command.ElementAt( 1 -1) == "TimerExpired")
        {
          ScriptRunningFlag = Translate("False");
          NOTIFY::DoCommand(ML_STAR, Translate("[Module]Notify[Command]SendMessage[Subject]Possible Script Error[Body]Hello, the scripts appear to have stopped communicating with the Hamilton. This run is being aborted. Do not fret! You can resume the method normally. Remember to save the excel sheet before you restart method execution![WaitForUser]Yes"));
          abort;
        }
        if (Command.ElementAt( 1 -1) == "END")
        {
          break;
        }
        NumCommands=Command.GetSize();
        {
          for(CommandCounter = 0; CommandCounter < NumCommands;)
          {
            CommandCounter = CommandCounter + 1;
            CommandString = Command.ElementAt( CommandCounter -1);
            TrcTrace(Translate("Command String: "), CommandString);
            Module = COMMANDS::GetCommandStringModule(CommandString);
            ModuleCommand = COMMANDS::GetCommandStringCommand(CommandString);
            if (Module == "Labware")
            {
              ReturnString = LABWARE::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Lid")
            {
              ReturnString = LID::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Pipette")
            {
              ReturnString = PIPETTE::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Notify")
            {
              ReturnString = NOTIFY::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "StatusUpdate")
            {
              ReturnString = STATUSUPDATE::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "IMCS SizeX Desalt")
            {
              ReturnString = IMCS_SIZEX_DESALTING::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "MagneticBeads")
            {
              ReturnString = MAGNETIC_BEADS::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Heater")
            {
              ReturnString = HEATER::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Transport")
            {
              ReturnString = TRANSPORT::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Timer")
            {
              ReturnString = TIMER::DoCommand(ML_STAR, CommandString);
            }
            if (Module == "Vacuum")
            {
              ReturnString = VACUUM::DoCommand(ML_STAR, CommandString);
            }
            COMMANDS::CollectResponse(ReturnString);
          }
        }
        COMMANDS::WriteResponse();
      }
    }
    COMMANDS::FinishRun();
    ScriptRunningFlag = Translate("False");
    NOTIFY::DoCommand(ML_STAR, Translate("[Module]Notify[Command]SendMessage[Subject]Method Completed Successfully[Body]Method is complete. Before clicking OK, you can still check the deck layout if you need help locating the final plate. Once you click OK, the method will shut down then close.[WaitForUser]Yes"));
    _ASYNC_PROCESS_USER_INFORMATION_KillFlag = Translate("True");
    if(0 == Join(UserInformationProcess, hslInfinite) )
    {
          MECC::RaiseRuntimeErrorEx(-1574043390, MECC::IDS::stepNameThreadWaitFor, MECC::IDS::errorStepFailedTimeout, "", "HxMetEdCompCmd");
    }
    HEATER::DeInit(ML_STAR, Translate(""));
    LID::DeInit(ML_STAR, Translate(""));
    NOTIFY::DeInit(ML_STAR, Translate(""));
    PIPETTE::DeInit(ML_STAR, Translate(""));
    STATUSUPDATE::DeInit(ML_STAR, Translate(""));
    TIMER::DeInit(ML_STAR, Translate(""));
    TRANSPORT::DeInit(ML_STAR, Translate(""));
    VACUUM::DeInit(ML_STAR, Translate(""));
    MAGNETIC_BEADS::DeInit(ML_STAR, Translate(""));
    DECKLOADINGVCURRENT::_ExitLibrary();
    PIPETTE::_ExitLibrary();
    LABWARE::_ExitLibrary();
    SEQUENCES::_ExitLibrary();
    COMMANDS::_ExitLibrary();
    NOTIFY::_ExitLibrary();
    STATUSUPDATE::_ExitLibrary();
    HEATER::_ExitLibrary();
    TIMER::_ExitLibrary();
    TRANSPORT::_ExitLibrary();
    VACUUM::_ExitLibrary();
    SCRIPT::_ExitLibrary();
    LID::_ExitLibrary();
    MAGNETIC_BEADS::_ExitLibrary();
    RETURNIDS::_ExitLibrary();
    RETURN::_ExitLibrary();
    PFIZERTOOLSVCURRENT::_ExitLibrary();
    IMCS_SIZEX_DESALTING::_ExitLibrary();
    DEBUGGING::_ExitLibrary();
  } }
